PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 720]
  expName = word priming
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
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    TextComponent TestText
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent submit_text
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Click to Submit
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    MouseComponent testmouse
      clickable = $submit_text
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/Ishika/OneDrive/Desktop/college/Lab in psychology/5 word primining/study_word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'book'},
      {'study_word': 'cushion'},
      {'study_word': 'phone'},
      {'study_word': 'marble'},
      {'study_word': 'board'},
      {'study_word': 'laptop'},
      {'study_word': 'chart'},
      {'study_word': 'T-shirt'},
      {'study_word': 'mouse'},
      {'study_word': 'pastry'},
      {'study_word': 'case'},
      {'study_word': 'cruise'},
      {'study_word': 'police'},
      {'study_word': 'keys'},
      {'study_word': 'poster'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = C:/Users/Ishika/OneDrive/Desktop/college/Lab in psychology/5 word primining/test.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test': 'l_pt_p', 'Reference': 'laptop', 'old_new': 'old'},
      {'test': '_ha_t', 'Reference': 'chart', 'old_new': 'old'},
      {'test': 'T_hi_t', 'Reference': 'Tshirt', 'old_new': 'old'},
      {'test': '_ou_e', 'Reference': 'mouse', 'old_new': 'old'},
      {'test': 'p_st_y', 'Reference': 'pastry', 'old_new': 'old'},
      {'test': 'c_s_', 'Reference': 'case', 'old_new': 'old'},
      {'test': '_ru_s_', 'Reference': 'cruise', 'old_new': 'old'},
      {'test': 'p_li_e', 'Reference': 'police', 'old_new': 'old'},
      {'test': 'k_y_', 'Reference': 'keys', 'old_new': 'old'},
      {'test': 'p_st_r', 'Reference': 'poster', 'old_new': 'old'},
      {'test': '_o_rd', 'Reference': 'board', 'old_new': 'old'},
      {'test': '_a_ble', 'Reference': 'marble', 'old_new': 'old'},
      {'test': '_ho_e', 'Reference': 'phone', 'old_new': 'old'},
      {'test': '_oo_', 'Reference': 'book', 'old_new': 'old'},
      {'test': 'c_s_io_', 'Reference': 'cushion', 'old_new': 'old'},
      {'test': 'ta_l_', 'Reference': 'table', 'old_new': 'new'},
      {'test': 'p_nc_l', 'Reference': 'pencil', 'old_new': 'new'},
      {'test': 'v_s_', 'Reference': 'vase', 'old_new': 'new'},
      {'test': 'bo_t_e', 'Reference': 'bottle', 'old_new': 'new'},
      {'test': 'c_m_ra', 'Reference': 'camera', 'old_new': 'new'}]
    Routine test
  LoopTerminator trials_2
