PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = lexical decision
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine welcome
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Welcome! You will see words or non-words on the screen. Press 'W' if it's a word, and 'N' if it's not a word. Try to respond as quickly and accurately as possible. Press any key to begin.
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    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent stimuli
      letterHeight = 0.05
      startVal [time (s)] = 1.0
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      text [set every repeat]:
        $stimulus
    KeyboardComponent key_resp_2
      allowedKeys = 'w','n'
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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Flow
  Routine welcome
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stimulus': 'Happy', 'word_type': 'word', 'valence': 'positive', 'corr_resp': 'w'},
      {'stimulus': 'Joy', 'word_type': 'word', 'valence': 'positive', 'corr_resp': 'w'},
      {'stimulus': 'Love', 'word_type': 'word', 'valence': 'positive', 'corr_resp': 'w'},
      {'stimulus': 'Success', 'word_type': 'word', 'valence': 'positive', 'corr_resp': 'w'},
      {'stimulus': 'Freedom', 'word_type': 'word', 'valence': 'positive', 'corr_resp': 'w'},
      {'stimulus': 'Peace', 'word_type': 'word', 'valence': 'positive', 'corr_resp': 'w'},
      {'stimulus': 'Smile', 'word_type': 'word', 'valence': 'positive', 'corr_resp': 'w'},
      {'stimulus': 'Bright', 'word_type': 'word', 'valence': 'positive', 'corr_resp': 'w'},
      {'stimulus': 'Frienship', 'word_type': 'word', 'valence': 'positive', 'corr_resp': 'w'},
      {'stimulus': 'Hope', 'word_type': 'word', 'valence': 'positive', 'corr_resp': 'w'},
      {'stimulus': 'Sad', 'word_type': 'word', 'valence': 'negative', 'corr_resp': 'w'},
      {'stimulus': 'Anger', 'word_type': 'word', 'valence': 'negative', 'corr_resp': 'w'},
      {'stimulus': 'Fear', 'word_type': 'word', 'valence': 'negative', 'corr_resp': 'w'},
      {'stimulus': 'Death', 'word_type': 'word', 'valence': 'negative', 'corr_resp': 'w'},
      {'stimulus': 'Failure', 'word_type': 'word', 'valence': 'negative', 'corr_resp': 'w'},
      {'stimulus': 'Pain', 'word_type': 'word', 'valence': 'negative', 'corr_resp': 'w'},
      {'stimulus': 'Loss', 'word_type': 'word', 'valence': 'negative', 'corr_resp': 'w'},
      {'stimulus': 'Cry', 'word_type': 'word', 'valence': 'negative', 'corr_resp': 'w'}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
    Routine trial
  LoopTerminator trials
